PsychoPy2experiment version="2021.1.4"
Settings
  Enable Escape = False
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = PEST Mindcrowd 2021
  logging level = debug
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Routines
  Routine crt
    CodeComponent code_crt
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('white')
        textbox_crt.setText('')
    TextComponent text_crt
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $question
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    TextboxComponent textbox_crt
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
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    TextComponent to_cont_crt
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = textbox_crt.getText() != ''
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    KeyboardComponent key_resp_crt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = textbox_crt.getText() != ''
      stopVal [duration (s)] = 999999
      store = nothing
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  Routine panas
    TextComponent text_panas
      color = black
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 999999
      text = This scale consists of a number of words that describe different feelings and emotions. Read each item and then mark the appropriate answer in the space next to that word. Indicate to what extent you generally feel this way, that is, how you feel on average.
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    PolygonComponent box_panas
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (0, 0.1)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
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    TextComponent feeling_panas
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $panas
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    TextComponent space_panas
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_panas.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    SliderComponent slider_panas
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['Very slightly/\nNot at all', 'A little', 'Moderately', 'Quite a bit', 'Extremely']
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_panas
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_panas.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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    CodeComponent code_panas
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('white')
        text_panas.alignText = 'left'
  Routine health_scd
    TextComponent text_health_scd
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $prompt
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    TextComponent to_cont_health_scd
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_health_scd.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    TextComponent to_cont_2_health_scd
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_2_health_scd.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    SliderComponent slider_health_scd
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['1', '2', '3', '4', '5', '6', '7', '8', '9', '10']
      letterHeight = 0.04
      pos = (0, -0.1)
      size = (1, 0.1)
      startVal [condition] = isSlider == 0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider_2_health_scd
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['Yes', 'No']
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.3, 0.1)
      startVal [condition] = isSlider == 1
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2,)
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    KeyboardComponent key_resp_health_scd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_health_scd.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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    KeyboardComponent key_resp_2_health_scd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_2_health_scd.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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  Routine scam_susceptibility
    TextComponent text_scam_suscep
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $prompt
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    SliderComponent slider_scam_suscep
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['Yes', 'No']
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.3, 0.1)
      startVal [condition] = isTextBox == 0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2)
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    TextComponent to_cont_scam_suscep
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_scam_suscep.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    TextboxComponent textbox_scam_suscep
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.1)
      startVal [condition] = isTextBox == 1
      stopVal [duration (s)] = 999999
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    KeyboardComponent key_resp_scam_suscep
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_scam_suscep.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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    TextComponent to_cont_2_scam_suscep
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = textbox_scam_suscep.getText() != ''
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    KeyboardComponent key_resp_2_scam_suscep
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = textbox_scam_suscep.getText() != ''
      stopVal [duration (s)] = 999999
      store = nothing
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  Routine demographics
    TextComponent text_demo
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $prompt
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    TextComponent to_cont_demo_0
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = demo_resp_0.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    TextComponent to_cont_demo
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = demo_resp_1.getRating() != None or demo_resp_2.getRating() != None or demo_resp_3.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    TextComponent to_cont_2_demo
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_2_demo.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    TextComponent to_cont_textbox_demo
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = textbox_demo.getText() != ''
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    SliderComponent slider_2_demo
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['0', '1-\n9k', '10-\n24k', '25-\n49k', '50-\n99k', '100-\n149k', '150-\n199k', '200-\n249k', '250-\n299k', '300-\n399k', '400-\n499k', '500k+']
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1, 0.08)
      startVal [condition] = isSlider == 1
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12)
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    KeyboardComponent key_resp_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = demo_resp_1.getRating() != None or demo_resp_2.getRating() != None or demo_resp_3.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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    KeyboardComponent key_resp_2_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_2_demo.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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    KeyboardComponent key_resp_0_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = demo_resp_0.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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    KeyboardComponent key_resp_demo_textbox
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = textbox_demo.getText() != ''
      stopVal [duration (s)] = 999999
      store = nothing
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    TextboxComponent textbox_demo
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.1)
      startVal [condition] = isSlider == -1
      stopVal [duration (s)] = 999999
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    SliderComponent demo_resp_0
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = ['Male', 'Female', 'Other']
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (0.8, 0.08)
      startVal [condition] = isSlider == 2
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2, 3)
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    SliderComponent demo_resp_1
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = ['Alone', 'With\nspouse']
      letterHeight = 0.03
      pos = (-0.4, -0.1)
      size = (0.2, 0.08)
      startVal [condition] = isSlider == 0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2)
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    SliderComponent demo_resp_2
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = ['With\nchild(ren)', 'Assisted\nLiving']
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (0.2, 0.08)
      startVal [condition] = isSlider == 0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (3, 4)
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    SliderComponent demo_resp_3
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = ['Other', 'Prefer Not\nto Answer']
      letterHeight = 0.03
      pos = (0.4, -0.1)
      size = (0.2, 0.08)
      startVal [condition] = isSlider == 0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (5, 6)
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  Routine ucla
    TextComponent text_ucla
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = How often do you feel alone?
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    TextComponent to_cont_ucla
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_ucla.getRating() != None
      stopVal [time (s)] = 999999
      text = Press Space to Continue
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    SliderComponent slider_ucla
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['Never', 'Rarely', 'Sometimes', 'Always']
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent key_resp_ucla
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_ucla.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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  Routine sni
    TextComponent text_sni
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $prompt
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    TextComponent to_cont_sni
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [condition] = slider_sni.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    SliderComponent slider_sni
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['Zero', 'One', 'Two', 'Three', 'Four', 'Five', 'Six', 'Seven+', 'Prefer\nnot to\nanswer']
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    KeyboardComponent key_resp_sni
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_sni.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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  Routine trial
    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Experiment:
        num_trials = 40
        inbox_text = ''
      Begin Routine:
        compose.alignText = 'left'
        inbox.alignText = 'left'
        starred.alignText = 'left'
        important.alignText = 'left'
        sent.alignText = 'left'
        drafts.alignText = 'left'
        more.alignText = 'left'
        subj_line.alignText = 'left'
        sender_text.alignText = 'left'
        to_me.alignText = 'left'
        email_body.alignText = 'left'
        email_body.anchorVert = 'top'
        att_label.alignText = 'left'
        att_box_text.alignText = 'left'
        att_box_pdf.alignText = 'left'
        win.setColor('white')
        num_trials -= 1
        inbox_text = 'Inbox(' + str(num_trials) + ')'
      End Routine:
        core.wait(1)
    TextComponent compose
      color = black
      letterHeight = 0.02
      pos = (-0.27, 0.39)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = Compose
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    TextComponent inbox
      color = black
      letterHeight = 0.02
      pos = (-0.27, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = Inbox
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    TextComponent starred
      color = black
      letterHeight = 0.02
      pos = (-0.27, 0.31)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = Starred
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    TextComponent important
      color = black
      letterHeight = 0.02
      pos = (-0.27, 0.27)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = Important
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    TextComponent sent
      color = black
      letterHeight = 0.02
      pos = (-0.27, 0.23)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = Sent
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    TextComponent drafts
      color = black
      letterHeight = 0.02
      pos = (-0.27, 0.19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = Drafts
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    TextComponent more
      color = black
      letterHeight = 0.02
      pos = (-0.27, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = More
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    SliderComponent slider_trial
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ['Definitely Safe', 'Possibly Safe', 'Possibly Suspicious', 'Definitely Suspicious']
      letterHeight = 0.04
      pos = (0, -0.4)
      size = (1.2, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent key_resp_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_trial.getRating() != None
      stopVal [duration (s)] = 999999
      store = nothing
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    TextComponent trial_to_cont
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [condition] = slider_trial.getRating() != None
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    PolygonComponent email_box
      fillColor = $[1,1,1]
      lineColor = $[0,0,0]
      lineWidth = 2
      opacity = 0
      pos = (0.07, 0.05)
      shape = rectangle
      size = (1.39, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
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    TextComponent subj_line
      color = black
      letterHeight = 0.018
      pos = (-0.12, 0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $subject_line
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    TextComponent sender_text
      color = black
      letterHeight = 0.018
      pos = (-0.11, 0.38)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $sender
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    TextComponent to_me
      color = black
      letterHeight = 0.018
      pos = (-0.11, 0.36)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text = to me
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    TextComponent email_body
      color = black
      letterHeight = 0.018
      pos = (-0.11, 0.34)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $body
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    PolygonComponent att_line
      fillColor = black
      lineColor = black
      pos = (0.065, -0.15)
      shape = line
      size = (1.2, 0)
      startVal [condition] = version == 'attach'
      stopVal [duration (s)] = 999999
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    TextComponent att_label
      color = black
      letterHeight = 0.018
      pos = (-0.03, -0.17)
      startVal [condition] = version == 'attach'
      stopVal [duration (s)] = 999999
      text = 1 Attachment
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    PolygonComponent att_box
      fillColor = white
      lineColor = gray
      lineWidth = 1.3
      pos = (-0.43, -0.24)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [condition] = version == 'attach'
      stopVal [duration (s)] = 999999
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    PolygonComponent att_box_line
      fillColor = gray
      lineColor = gray
      pos = (-0.43, -0.26)
      shape = line
      size = (0.2, 0)
      startVal [condition] = version == 'attach'
      stopVal [duration (s)] = 999999
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    PolygonComponent att_box_inner
      fillColor = red
      lineColor = red
      pos = (-0.507, -0.275)
      shape = rectangle
      size = (0.04, 0.025)
      startVal [condition] = version == 'attach'
      stopVal [duration (s)] = 999999
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    TextComponent att_box_text
      color = black
      letterHeight = 0.016
      pos = (0.02, -0.274)
      startVal [condition] = version == 'attach'
      stopVal [duration (s)] = 999999
      text [set every repeat] = $att_name
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    TextComponent att_box_pdf
      letterHeight = 0.016
      pos = (-0.022, -0.275)
      startVal [condition] = version == 'attach'
      stopVal [duration (s)] = 999999
      text = PDF
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  Routine instr_trial
    CodeComponent code_instr_trial
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('black')
    TextComponent instr_trial_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $instr_text
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    ImageComponent instr_trial_image
      image [set every repeat] = $img_source
      size = (1.6, 1)
      startVal [condition] = instr_text == 'get_image'
      stopVal [duration (s)] = 999999
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    TextComponent instr_trial_to_cont
      color [set every repeat] = $text_color
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    KeyboardComponent key_resp_instr_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 999999
      store = nothing
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  Routine end
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thanks!
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    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('black')
  Routine instr_surveys
    TextComponent survey_instr
      letterHeight [set every repeat] = font_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999999
      text [set every repeat] = $instr
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    TextComponent survey_instr_to_cont
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 999999
      text = Press Space to Continue
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    KeyboardComponent survey_instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 999999
      store = nothing
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  Routine score_crt
    TextComponent score_text_crt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Your Score: 
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    CodeComponent code_crt_score
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('black')
  Routine score_trial
    TextComponent score_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Finished! Please wait…
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    CodeComponent code_score
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('black')
Flow
  LoopInitiator instr_loop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instr_trial
  LoopTerminator instr_loop
  LoopInitiator trials_emails loopType="TrialHandler"
    conditionsFile = emails_v1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'email_id': '002S', 'sender': 'eBay', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Safe', 'body': '"\nIf you did not forget your password, please ignore this email.\n\nTo choose a new password, please go to the URL below: \n(please use it exactly as is including all trailing fullstops)\nhttps://fyp.ebay.com/ChangePassword?reqinput=d433910962\n\nThank you for using eBay!\nhttp://pages.ebay.com/"', 'version': 'link', 'subject_line': 'Forgot your password?', 'att_name': 'newpass.pdf'},
      {'email_id': '018S', 'sender': 'Our Revolution', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Safe', 'body': '"*Name* -\n\nHere is a simple truth — no one in our country should be sitting in jail just because they are poor.\n\nUnfortunately, that is not the case.\n\nRight now, there are over 700,000 people in county or city jails — sixty-five percent of them, more than 400,000 people, have not been convicted of a crime. Many are locked up simply because they cannot afford bail.\n\nLet me be clear. The United States of America has criminalized poverty and that is not acceptable.\n\nThat is why this week I introduced the No Money Bail Act in the Senate to stop this horrific practice.\n\nWill you join me and sign up as a Citizen Cosponsor of the No Money Bail Act?"', 'version': 'link', 'subject_line': 'Will you join me and sign up as a Citizen Cosponsor of the No Money Bail Act?', 'att_name': 'att.pdf'},
      {'email_id': '019S', 'sender': 'NVIDIA', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Safe', 'body': 'Hello *Name*,\n\nYou requested to use this email address to access your NVIDIA account.\n\nClick the link below to verify this email address.\n\nVERIFY EMAIL ADDRESS \n\nNVIDIA Corporation, 2701 San Tomas Expressway, Santa Clara, CA 95050.', 'version': 'link', 'subject_line': 'NVIDIA email verification', 'att_name': 'verify.pdf'},
      {'email_id': '030S', 'sender': 'Adobe', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Safe', 'body': '"Dear Adobe Account Holder,\t \n \tYour privacy is important to us and we are committed to being proactive when we detect events that might put your personal data at risk. To help protect your information, we have reset the password for the account associated with your Adobe ID that may have been compromised in data breaches from other online services. The next time you log into your Adobe account, you will be prompted with a password reset notice. If you have questions, please review our guidelines on Adobe.com for changing or resetting your password. Or, you can contact us.\t \n \tIn general, we recommend that you use different credentials on each website. You should take this opportunity to change your password on any websites where you used the same username or password as your Adobe ID. You can also enable Adobe’s two-factor authentication for your account to strengthen your account security. For more information on setting up two-factor authentication, please review our guidelines on Adobe.com.\n\t \n \tSincerely,\nAdobe Customer Care"', 'version': 'link', 'subject_line': 'Please update your Adobe password', 'att_name': 'att.pdf'},
      {'email_id': '006S', 'sender': 'Bank of America', 'category': 'Finance and Banking', 'weapon': 'Type', 'type': 'Real-Safe', 'body': 'Bank of America ®\n\nHi, *Name*, money was deposited into your account\n\t\nAmount:\t\n$\t48.00\nAccount:\tPERSONAL CHECKING/SAVINGS ACCOUNT - 0000\nOn:\tJuly 19, 2018\nFrom:\tVENMO REFUND\nView deposit details\nThank you for being our customer.', 'version': 'link', 'subject_line': 'Receipt: Direct Deposit Received', 'att_name': 'att.pdf'},
      {'email_id': '022S', 'sender': 'Bank of America', 'category': 'Finance and Banking', 'weapon': 'Type', 'type': 'Real-Safe', 'body': "Bank of America®\n\nAccount Alert\nPERSONAL CHECKING/SAVINGS ACCOUNT ending in 0000\nElectronic transfer over your requested alert limit\n\n*Name*,\nWe're letting you know a recent transfer from your account went over the limit you set for this alert.\nHere are the details of the transfer:\nAmount:\t\t$500.00\t\nTransaction date:\t\t07/01/2018\t\n\nYou can sign in to Online or Mobile Banking to review this activity. If you don't recognize this transaction, please call us at 1.800.432.1000.", 'version': 'attach', 'subject_line': 'Account Alert: Online Transfer Over Specified Alert Limit', 'att_name': 'att.pdf'},
      {'email_id': '024S', 'sender': 'Airbnb', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Safe', 'body': '\nHi Ziad,\nWelcome to Airbnb! In order to get started, you need to confirm your email address.\nConfirm Email\nThanks,\nThe Airbnb Team\nSent with ♥ from Airbnb\n\n\u200cA\u200ci\u200cr\u200cb\u200cn\u200cb\u200c,\u200c \u200cI\u200cn\u200cc\u200c.\u200c,\u200c \u200c8\u200c8\u200c8\u200c \u200cB\u200cr\u200ca\u200cn\u200cn\u200ca\u200cn\u200c \u200cS\u200ct\u200c,\u200c \u200cS\u200ca\u200cn\u200c \u200cF\u200cr\u200ca\u200cn\u200cc\u200ci\u200cs\u200cc\u200co\u200c,\u200c \u200cC\u200cA\u200c \u200c9\u200c4\u200c1\u200c0\u200c3\u200c', 'version': 'attach', 'subject_line': 'Please confirm your e-mail address - Airbnb', 'att_name': 'att.pdf'},
      {'email_id': '034S', 'sender': 'CVS Pharmacy', 'category': 'Lottery & Sweepstakes', 'weapon': 'Type', 'type': 'Real-Safe', 'body': "CVS Pharmacy®\nextracare®\t\nWe'd love to hear from you!\nTake our quick survey and you could win hundreds of cash prizes!*\n\nHere's your chance to win $1,000!*\n \nCVS Pharmacy™\n© 2018 CVS Health™\nOne CVS Drive, Woonsocket, RI 02895\n \n*For a copy of the sweepstakes rules, please visit http://www.cvssurvey.com/sweepstakes/. Open to all U.S. residents age 18 and older. No purchase necessary.", 'version': 'attach', 'subject_line': 'A Chance to Win $1,000!', 'att_name': 'att.pdf'},
      {'email_id': '027S', 'sender': 'Headspace', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Safe', 'body': 'You’re well on your way to setting up your Headspace account. We just need to verify your email. Download the attachment below to let us know this is really you. \n\nOh yes, this file is valid for 24 hours.\n \nIf you have any questions, please email us at help@headspace.com or visit our FAQs. You can also chat with a real live human during our operating hours. They can answer questions about your account or help you with your meditation practice.', 'version': 'attach', 'subject_line': 'Confirm your email on Headspace', 'att_name': 'verify.pdf'},
      {'email_id': '029S', 'sender': 'my2K', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Safe', 'body': 'Dear my2K Players, \n\nExciting changes are coming to my2K. From now on, your my2K profile will be known simply as your 2K Account. Along with the new name, we are rolling out a wide variety of system upgrades to improve the player experience and provide you with enhanced features for managing your account preferences and engaging with your favorite 2K franchises.\n\nDOWNLOAD THE ATTACHMENT BELOW TO UPDATE YOUR ACCOUNT.\n\nRequired Action: \nUpdate your password: To improve security, we’ve updated our password requirements. Please visit the 2K Account portal to create a new password.', 'version': 'attach', 'subject_line': 'FINAL REMINDER - my2K Account ACTION REQUIRED', 'att_name': 'my2kupdate.pdf'},
      {'email_id': 24.0, 'sender': 'Xerox', 'category': 'General', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'Dear Customers,\nClick Here to view your documents. Documents scanned and sent by Xerox Workcentre.\n\nSent by: Alan\nNumber of Images: 3\n\nThank you using Xerox Work Centre', 'version': 'link', 'subject_line': 'Your Documents Are Ready', 'att_name': 'alandocs.pdf'},
      {'email_id': 123.0, 'sender': 'Microsoft', 'category': 'University Phishing Emails', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'This e-mail has been sent to you by Office 365 to inform you that we were unable to verify your account details. This might be due to either of the following reasons:\n\n1. A recent change in your personal information. (eg:  address, phone)\n\n2. illegal use of your account.\n\nDue to this, to ensure that your email service is not interrupted, we request you to confirm and update your information today by following the link below\n\nhttp://bit.ly/2rtGGQA\n\nOffice 365! Mail Product Management', 'version': 'link', 'subject_line': 'Verify Your Account', 'att_name': 'instructions.pdf'},
      {'email_id': 38.0, 'sender': 'Ozemail', 'category': 'Phishing Emails', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'Dear value customers,\n\nThis is to inform all our esteem ozemail account customers that upgrading/maintenance of our server has been schedule for 27th to 29th of July, 2009 to help serve you better. You may experience login problems during this period. We are also having congestion due to the anonymous registration of accounts and on this note, we are deactivating some accounts that are longer active and your account maybe deactivated if no response from your humble self to this email within 1 week. To confirm and to keep your ozemail account active during and after this upgrade and maintenance, you are advice to e-mail your account details as listed below. This information will be needed to verify your account, keep it active and to avoid being closed.\n\n* E-mail:\n* User ID:\n* Password:\n* Home/Office Address:\n* Date of Birth:\n\nYour ozemail account shall remain active after we have successfully confirmed and upgrade our server. We apologize for any inconveniences. Thank you for your swift response to this notification. Ozemail Technical Support Team. © 2009 iiNet Limited ACN 068 628 937 All Rights Reserved.', 'version': 'link', 'subject_line': 'Ozemail Account Verification', 'att_name': 'att.pdf'},
      {'email_id': 103.0, 'sender': 'Dropbox', 'category': 'University Phishing Emails', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'Greetings,\n \nYou have a new documentation from Tommy Lute via Dropbox Message Center.\n\nVisit http://www. bpsolutions.com.pl/wp-content/plugins/css-ready-selectors/2015/document.php to view.\n \nThank You,\nTommy Lute\nFounder and CEO', 'version': 'link', 'subject_line': 'New Documentation.', 'att_name': 'lute-0483.pdf'},
      {'email_id': 18.0, 'sender': 'HSBC', 'category': 'Finance and Banking', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'HSBC UK  has been receiving complaints from our customers for unauthorised use of the HSBC UK Online accounts. As a result we are making an extra security check on all of our Customers account in order to protect their information from theft and fraud.\n\nDue to this, you are requested to follow the provided steps and confirm your Online Banking details for the safety of your Accounts. Please Click Here To Start .\n\nHowever, Failure to do so may result in temporary account suspension. Please understand that this is a security measure intended to help protect you and your account. We apologize for any inconvenience.\n\nThanks for your co-operation.\nFraud Prevention Unit\nLegal Advisor\nHSBC UK.', 'version': 'link', 'subject_line': 'Dear Customer,', 'att_name': 'att.pdf'},
      {'email_id': 127.0, 'sender': 'USAID', 'category': 'University Phishing Emails', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'Dear <Name>,\n\nMy name is Paul Logan Arrington and I work with USAID, and my job is to provide part -time employments for qualified students during the academic year and beyond. I have contacted you because there is an opening for you at DRES and bellow are the lines from your potential employer:\n\nMy name is Dr. Lori Snow and I work as a clinical counselor for the department of Disability Resources and Educational Services (DRES). I provide individual and group therapy, coaching, assessment and academic screenings to support students with disabilities (physical, chronic, psychiatric, and invisible)registered with DRES. A large percentage of the students served by the mental health unit have psychiatric disabilities or co-morbid psychiatric disabilities and need mental health support to be successful at the university. In addition, many University of students with academic difficulties and no prior diagnosis are seen and assessed through the academic screening and assessment process. I also am the director of supervision, training and coordination of counseling psychology and clinical psychology graduate students of the United States who have practicums at DRES and APA-accredited school psychology pre-doctoral interns.\n\nIf you would like to know more, contact your employer by replying this email With your:\n\nFull name,\nCurrent Residential Address,\nAlternate email (different from school email) and Cell #.', 'version': 'attach', 'subject_line': 'Re: Administrative Assistant', 'att_name': 'att.pdf'},
      {'email_id': 136.0, 'sender': 'PCH', 'category': 'Lottery and Sweepstakes', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'We wish to congratulate you for being the winner of 850,000.00 USD in the recent 2018 Publishers Clearing House e-mail Lottery.\nKindly send your contacts to pchlotto2018claimsoffice@usa.com\n \n*Given Names:\n*Mailing Address:\n*Telephone:\n*Gender:\n*Age:\nKristin Cooke\nOfficial Notification\n----------------------------------------------\n© Copyright 2018 Publishers Clearing House. All Rights Reserved', 'version': 'attach', 'subject_line': 'PCH LOTTO ............. Claims Code 89773453HR', 'att_name': 'att.pdf'},
      {'email_id': 33.0, 'sender': 'Dulwich Picture Gallery', 'category': 'Job Offer', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'Dulwich Picture Gallery\nGallery Road, Dulwich Village\nLondon SE21 7AD.\n\nGood Day to You\n\nI am pleased to give you an offer for employment as a consultant with our fledgling company.\nWe at Dulwich Picture Gallery have a mission to help individuals with investing into the Art & Antique but due to our wide range of customers and low reach in terms of offices worldwide, we have decided to make ties with individuals around the world who are willing to be a part of our mission to make the future bright for our investors.\n\nIf you are interested please kindly get to back to me.\n\n\nYours Faithfully\nDr Richard Doherty', 'version': 'attach', 'subject_line': 'Part Time Job Opportunity', 'att_name': 'att.pdf'},
      {'email_id': 116.0, 'sender': 'HIST 321', 'category': 'University Phishing Emails', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'Dear Student, \n\nThis is to inform you that there has been a little changes in the class time-table and school syllabus. It is important to check upgraded syllabus attached below.\n\nIn preparation, please read through the upgraded syllabus below  -- refer to the document with the footer "as of August 21."  You have a small amount of reading to do, but nothing overwhelming.  We\'ll talk about the concept of the course, what we mean by Atlantic World, and what this model of historical inquiry does for us.  No worries--I do not expect you to have a background in history etc. to do well in this class.\n\nYou have one "assignment" for tomorrow--introduce yourselves on the Collab discussion board.  Several of your fellow students have already done so.  Take 300 or so words to give us a sense of your interests, personality, your favorite cheese…whatever.  Please upload an avatar picture using My Profile.   I would also appreciate it if you would read other students\' entries and comment on a few.  Get to know your classmates! \n\nI\'m looking forward to a great semester.\n\nUNIVERSITY of VIRGINIA | SCPS\n104 Midmont Lane, Charlottesville, VA 22904', 'version': 'attach', 'subject_line': 'Changes to the syllabus and other important updates', 'att_name': 'syllabus.pdf'},
      {'email_id': 15.0, 'sender': 'St. George Bank', 'category': 'Finance and Banking', 'weapon': 'Type', 'type': 'Real-Scam', 'body': 'Dear Customer,\n\nDue to recent account takeovers and unauthorized listings, St.George Bank is requesting a new account verification procedure. From time to time, randomly selected accounts (seller and/or buyer) are placed under an advanced updating process based on merchant accounts/bank relationsand on-file credit cards. St.George Bank may also request in an email message scanned/faxed copies of one or more photo ID’s. Your account confirmation may go wrong if your credit card/bank account has expired, or if you have changed/replaced your credit card without letting us know about the change. * Your account is not suspended, but if in 36 hours after you receive this message your account is not confirmed we reserve the right to terminate your St.George Bank subscription. * If you received this notice and you are not an authorized St.George Bank account holder, please be aware that it is in violation of St.George Bank policy to represent oneself as an St.George Bank user. Such action may also be in violation of local, national, and/or international law.\n\nTo confirm your identity with us click HERE\n\nThis mail is generated by an automated service. St.George Bank Limited ABN 92 055 513 070 AFS Licence No. 240997', 'version': 'attach', 'subject_line': 'Account Verification', 'att_name': 'att.pdf'},
      {'email_id': '006713bS', 'sender': 'McAfee, Inc.', 'category': 'Security', 'weapon': 'Perceptual Contrast', 'type': 'Sim-Safe', 'body': '*Name*, \n\nYour computer may be at risk for malicious activity and personal information hijacks. Many antivirus programs on the market are not kept up to date with the latest developments in cybersecurity. McAfee is different, however, in that we constantly strive to protect your sensitive information. For one low payment, you can receive the latest edition of our computer protection software. Please visit our website linked below. \n\nhttps://www.mcafee.com/us/index.html\n\n~Name~\n\nMcAfee, Inc. CEO\nSanta Clara, California ', 'version': 'link', 'subject_line': 'Protect your Computer with McAfee ', 'att_name': 'mcafeeabout.pdf'},
      {'email_id': '003631gS ', 'sender': 'Loyalty Bank', 'category': 'Financial', 'weapon': 'Authority', 'type': 'Sim-Safe', 'body': 'Hello, \nYou have a current overdue balance in your account of $255.37. A $50.00 late fee will be added to your account if you do not pay by August 31st. To view/manage your account balances please log into your account at http://www.loyaltybank.com/account-login/balances\nThank you, \n~Name~', 'version': 'link', 'subject_line': 'Loyalty Bank Overdue Balance', 'att_name': 'instructions.pdf'},
      {'email_id': '005912bS', 'sender': 'Body Smart', 'category': 'Legal', 'weapon': 'Perceptual Contrast', 'type': 'Sim-Safe', 'body': 'Hello,\nYour account shows outstanding balances that are overdue. According to our records, you owe Body Smart Gym $39.99 for last month’s membership. Payment is due by the end of this month and if not a $50.00 late fee will be added to your dues. \nTo review your account balances and to pay fees, please log into your account at http://www.bodysmartgym.com/account/login\nSincerely, \nThe Body Smart Team', 'version': 'link', 'subject_line': 'Overdue Fees', 'att_name': 'instructions.pdf'},
      {'email_id': '024242S', 'sender': '~Name Law Firm~', 'category': 'Legal', 'weapon': 'Commitment/Consistency', 'type': 'Sim-Safe', 'body': 'Dear *Name*, \nMy name is ~Name~ from ~Name~ Law Firm. We are working together to raise awareness about identity theft. If you have been a victim of identity theft, or if you would like to know how to put an end to it please visit our webpage at http://www.lawandidentitytheft.com/info\nWith your help we can raise awareness about identity theft!\nThank you, \n~Name~', 'version': 'link', 'subject_line': 'Help Us End Identity Theft', 'att_name': 'identityaware.pdf'},
      {'email_id': '008754eS', 'sender': 'PETA', 'category': 'Ideological', 'weapon': 'Social Proof', 'type': 'Sim-Safe', 'body': '*Name*,\n\nJoin the community of animal rights activists who want to end all forms of animal cruelty! All it takes is a signature to make a big difference.\n\nAt PETA, we are determined to end animal cruelty by any means necessary. It is not an easy endeavor, however, as many stones go unturned without national support. Which is why we are reaching out to you for support. Visit http://www.change.org/animalrightspeta/ to get involved in the crusade against animal abuse!\n\nThank you for your continued support. \n\n~Name~\nPresident, PETA (People for the Ethical Treatment of Animals)', 'version': 'link', 'subject_line': 'Sign our Animal Rights Petition!', 'att_name': 'petapetition.pdf'},
      {'email_id': '002253cS', 'sender': 'Watchdogs', 'category': 'Security', 'weapon': 'Social Proof', 'type': 'Sim-Safe', 'body': 'Dear *Name*, \n\nWatchdogs is a local, neighborhood watch group aimed at protecting you and your loved ones. Get on board to help our organization thrive and eliminate threats to your safety! \n\nSince our organization started, we have decreased the number of break-ins and domestic disturbances in your area. We need your help, however, in keeping our organization alive. \n\nSee the attached file below for more information on our organization and how you can contribute.\n\n~Name~\nPresident, Neighborhood Watchdogs  ', 'version': 'attach', 'subject_line': 'Security in your Neighborhood ', 'att_name': 'aboutwatchdogs.pdf'},
      {'email_id': '006162bS', 'sender': 'Kersey Law', 'category': 'Legal', 'weapon': 'Liking', 'type': 'Sim-Safe', 'body': 'Hello, \nWe are aware that you missed your recent court date and now have a bench warrant issued for your arrest. We are here for you and would like to assist you in court to help mitigate further consequences. \nIf you would like more information on how we can help, download the attachment below.\n\nSincerely, \n~Name~\nKersey Law', 'version': 'attach', 'subject_line': 'Kersey Law ', 'att_name': 'aboutkersey.pdf'},
      {'email_id': '005441jS ', 'sender': 'Cognition & Aging Lab ', 'category': 'Financial', 'weapon': 'Commitment/Consistency', 'type': 'Sim-Safe', 'body': 'Dear *Name*,\nThe Cognition and Aging Lab at the University of Arizona is studying the effects of cognition and aging in the elderly. We are currently raising money to fund this research project and we are hoping to raise $10,000 by the end of April. If you would like to make a monetary donation please see the attachment below.\nAny donation is greatly appreciated!\n\nThank you,\n~Name~\nCognition and Aging Lab\nUniversity of Arizona', 'version': 'attach', 'subject_line': 'Cognition and Aging Research Lab Needs Your Help', 'att_name': 'donate.pdf'},
      {'email_id': '007616cS', 'sender': 'AHA', 'category': 'Health', 'weapon': 'Perceptual Contrast', 'type': 'Sim-Safe', 'body': 'Dear, *Name*, \nHeart disease is the leading cause of death for both men and women in the United States. If you think you may be at risk for heart disease, you may want to take a moment to look at our webpage below. We offer advice on how to reduce the risks of heart disease and, if eligible, you may be able to sign up for a health screening. Take our survey now by downloading the attached file.\n\nSincerely, \nThe American Heart Association', 'version': 'attach', 'subject_line': 'Heart Disease Screening', 'att_name': 'survey.pdf'},
      {'email_id': '025175S', 'sender': 'Amazon', 'category': 'Social', 'weapon': 'Scarcity', 'type': 'Sim-Safe', 'body': 'Dear *Name*,\n\nAmazon is offering its users a limited time offer of a free gift! Send a free gift to any of your close relatives or friends, at no charge! This offer is limited and must be redeemed within the next 48 hours.\n\nShow your loved ones how much you care by redeeming this promotion. Instructions are attached below.\n\nThis offer will expire in 2 days. \n\nAmazon.com\nSeattle, Washington\nUnited States of America', 'version': 'attach', 'subject_line': 'Send a Free Gift on Us!', 'att_name': 'instructions.pdf'},
      {'email_id': 25052.0, 'sender': 'Client Advocacy Outreach Center', 'category': 'Legal', 'weapon': 'Social Proof', 'type': 'Sim-Scam', 'body': 'Dear *Name*,\nIn 2014, the 3,500 successful class action lawsuits were awarded $2,300,000,000 for reparations to faulty products and medical treatment. If you’ve had any issues related to botched surgery, significant pain after treatment, or incorrect prescriptions, you could be entitled to significant reparations alongside hundreds of other patients.\nIf you think you may have a case, take a look at our website, http://www.harbenlock.com/lawsuit-legal/. One of our representatives would be glad to review your possible case with you over online messenger, by phone, or in person. You could join thousands of other clients working together to receive payment you deserve!\n~Name~\nDirector of Information Outreach Center for Client Advocacy 520-555-4232', 'version': 'link', 'subject_line': 'Join a Class Action Lawsuit Now! ', 'att_name': 'lawsuitdetails.pdf'},
      {'email_id': '004051l ', 'sender': 'Dunes Travel Agency', 'category': 'Financial', 'weapon': 'Social Proof', 'type': 'Sim-Scam', 'body': 'Hello *Name*,\nI would like to invite you to join the thousands of other clients who have experienced our vacation excursions.\nDunes was developed for clients to experience lavish vacation spots at an affordable cost. Our company has earned the title of Top 10 Best Travel Agency.\nTo learn more on how you can start planning your dream vacation, visit our website at http:// www.harperkellerservices.com/vacationpackets-\n financial/2015/05/21/plan-your-vacation-now/. Best,\n~Name~ \nDunes Customer Service Rep Miami, Fl 33018', 'version': 'link', 'subject_line': 'Dunes Vacation Packets ', 'att_name': 'dunesabout.pdf'},
      {'email_id': '007033b', 'sender': 'Computer Safe Inc.', 'category': 'Security', 'weapon': 'Authority', 'type': 'Sim-Scam', 'body': '*Name*,\nYour software antivirus protection system will\nexpire within one week. You have received\nmultiple warnings earlier this month. In order to\nrenew the protection system, you must follow\nthe instructions on the reminder pop ups\nperiodically activated by your computer. If you\nhave not received any pop ups, click the link\nbelow to visit the renewal portal where the\ntransaction may be done.\nhttp://www.bolzensecurity.com/antivirussecurity/\n~Name~\nCustomer', 'version': 'link', 'subject_line': 'Antivirus Renewal', 'att_name': 'portal.pdf'},
      {'email_id': 24242.0, 'sender': 'Pieda Law Firm', 'category': 'Legal', 'weapon': 'Commitment/Consistency', 'type': 'Sim-Scam', 'body': 'Dear *Name*,\nHave you or anyone you know been a victim of Internet fraud? Has your information been canvassed and harvested for telemarketers and identity thieves? And would you like to contribute to ending the cycle of informational abuse?\nThen join Pieda Law Firm’s Study to Evaluate the Patterns of Online Scammers. If you don’t believe that this study applies to you, be aware that we are looking add wide brackets of data from people of all age groups and degrees of Internet usage to determine who is being targeted and how.\nPlease find out more about SEPOS by following the link below: http://www.harbenlock.com/ internetfraud-legal/\n \nThank you,\n~Name~ \nTax Attorney, Pieda Law', 'version': 'link', 'subject_line': 'Fight against Internet Fraud', 'att_name': 'aboutsepos.pdf'},
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    Routine trial
  LoopTerminator trials_emails
  Routine score_trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = instr_crt.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instr_surveys
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = crt.xlsx
    loopType = sequential
    nReps = 1
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    Routine crt
  LoopTerminator trials_2
  Routine score_crt
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = panas.xlsx
    loopType = sequential
    nReps = 1
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    Routine panas
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = health_scd.xlsx
    loopType = sequential
    nReps = 1
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    Routine health_scd
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = scam_suscep.xlsx
    loopType = sequential
    nReps = 1
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    Routine scam_susceptibility
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = demographics.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine demographics
  LoopTerminator trials_6
  Routine ucla
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = sni.xlsx
    loopType = sequential
    nReps = 1
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    Routine sni
  LoopTerminator trials_7
  Routine end
